CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['nucleus:', 'membrane: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "nucleus.tif")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "membrane.tif")
    Name to assign these images:membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):13,26
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:membrane
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:membrane
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    Name the output image that has the measurements displayed:DisplayImage
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    Image elements to save:Image
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    Display mode:Color
    Color map:gray
    Display background image?:No
    Color map scale:Use this image's measurement range
    Color map range:0.0,10.0

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Single name
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    Enter single file name:mask_cellprofiler
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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